# Generated by Configurator on Tue Jul 16 20:07:38 CST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM10,SerialManager,COM10
Device,COM3,SerialManager,COM3
Device,TUCam,TUCam,TUCam
Device,Spectra,LumencorSpectra,Spectra
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,X-Cite120PC,Xcite,X-Cite120PC

# Pre-init settings for devices
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,Spectra,Port,COM3
Property,Spectra,SetLE_Type,SpectraX
Property,X-Cite120PC,Port,COM10

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TICondenserCassette,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,TUCam
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,4,5-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,TINosePiece,2,3-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,1,2-Plan Apo 4x NA 0.20 Dry
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5-Ph3
Label,TICondenserCassette,3,4-Ph2
Label,TICondenserCassette,2,3-Ph1
Label,TICondenserCassette,1,2-PhL
Label,TICondenserCassette,0,1-A
# TIFilterBlock1
Label,TIFilterBlock1,5,6-DAPI
Label,TIFilterBlock1,4,5-C-G-R
Label,TIFilterBlock1,3,4-Cy5
Label,TIFilterBlock1,2,3--B/EM
Label,TIFilterBlock1,1,2-FI-TR
Label,TIFilterBlock1,0,1------
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: BF
# Preset: 10X_External
ConfigGroup,BF,10X_External,TUCam,Exposure,10.0016
ConfigGroup,BF,10X_External,TUCam,Gain,CMS
ConfigGroup,BF,10X_External,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,10X_External,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,10X_External,TUCam,Output Trigger Port,1
ConfigGroup,BF,10X_External,TUCam,Output Trigger Width,5000
ConfigGroup,BF,10X_External,TUCam,Trigger Edge Mode,Rising
ConfigGroup,BF,10X_External,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,10X_External,TUCam,Trigger Mode,Standard
ConfigGroup,BF,10X_External,Spectra,Blue_Enable,0
ConfigGroup,BF,10X_External,Spectra,Blue_Level,100
ConfigGroup,BF,10X_External,Spectra,Cyan_Enable,0
ConfigGroup,BF,10X_External,Spectra,Cyan_Level,100
ConfigGroup,BF,10X_External,Spectra,Green_Enable,0
ConfigGroup,BF,10X_External,Spectra,Green_Level,100
ConfigGroup,BF,10X_External,Spectra,Red_Enable,0
ConfigGroup,BF,10X_External,Spectra,Red_Level,100
ConfigGroup,BF,10X_External,Spectra,State,0
ConfigGroup,BF,10X_External,Spectra,Teal_Enable,0
ConfigGroup,BF,10X_External,Spectra,Teal_Level,100
ConfigGroup,BF,10X_External,Spectra,Violet_Enable,0
ConfigGroup,BF,10X_External,Spectra,Violet_Level,100
ConfigGroup,BF,10X_External,Spectra,White_Enable,0
ConfigGroup,BF,10X_External,Spectra,White_Level,100
ConfigGroup,BF,10X_External,Spectra,YG_Filter,0
ConfigGroup,BF,10X_External,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X_External,TINosePiece,State,0
ConfigGroup,BF,10X_External,TICondenserCassette,ExtraDelayMs,0.0000
ConfigGroup,BF,10X_External,TICondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X_External,TICondenserCassette,State,2
ConfigGroup,BF,10X_External,TIFilterBlock1,Label,6-DAPI
ConfigGroup,BF,10X_External,TIFilterBlock1,State,5
ConfigGroup,BF,10X_External,TILightPath,Label,2-Left100
ConfigGroup,BF,10X_External,TILightPath,State,1
ConfigGroup,BF,10X_External,TIPFSOffset,Position,128.7000
ConfigGroup,BF,10X_External,TIPFSStatus,State,Off
ConfigGroup,BF,10X_External,X-Cite120PC,LampIntensity,12
ConfigGroup,BF,10X_External,X-Cite120PC,Shutter-State,Closed
ConfigGroup,BF,10X_External,X-Cite120PC,Trigger,Off

# Preset: 60X_Sync
ConfigGroup,BF,60X_Sync,TUCam,Exposure,25.9974
ConfigGroup,BF,60X_Sync,TUCam,Gain,HDR
ConfigGroup,BF,60X_Sync,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,60X_Sync,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,60X_Sync,TUCam,Output Trigger Port,1
ConfigGroup,BF,60X_Sync,TUCam,Output Trigger Width,5000
ConfigGroup,BF,60X_Sync,TUCam,Trigger Edge Mode,Rising
ConfigGroup,BF,60X_Sync,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,60X_Sync,TUCam,Trigger Mode,Standard
ConfigGroup,BF,60X_Sync,Spectra,Blue_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Blue_Level,100
ConfigGroup,BF,60X_Sync,Spectra,Cyan_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Cyan_Level,100
ConfigGroup,BF,60X_Sync,Spectra,Green_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Green_Level,100
ConfigGroup,BF,60X_Sync,Spectra,Red_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Red_Level,100
ConfigGroup,BF,60X_Sync,Spectra,State,0
ConfigGroup,BF,60X_Sync,Spectra,Teal_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Teal_Level,100
ConfigGroup,BF,60X_Sync,Spectra,Violet_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,Violet_Level,100
ConfigGroup,BF,60X_Sync,Spectra,White_Enable,0
ConfigGroup,BF,60X_Sync,Spectra,White_Level,100
ConfigGroup,BF,60X_Sync,Spectra,YG_Filter,0
ConfigGroup,BF,60X_Sync,TINosePiece,Label,5-Plan Apo 60x NA 1.40 Oil
ConfigGroup,BF,60X_Sync,TINosePiece,State,4
ConfigGroup,BF,60X_Sync,TICondenserCassette,ExtraDelayMs,0.0000
ConfigGroup,BF,60X_Sync,TICondenserCassette,Label,5-Ph3
ConfigGroup,BF,60X_Sync,TICondenserCassette,State,4
ConfigGroup,BF,60X_Sync,TIFilterBlock1,Label,2-FI-TR
ConfigGroup,BF,60X_Sync,TIFilterBlock1,State,1
ConfigGroup,BF,60X_Sync,TILightPath,Label,2-Left100
ConfigGroup,BF,60X_Sync,TILightPath,State,1
ConfigGroup,BF,60X_Sync,TIPFSOffset,Position,128.7000
ConfigGroup,BF,60X_Sync,TIPFSStatus,State,Off
ConfigGroup,BF,60X_Sync,X-Cite120PC,LampIntensity,12
ConfigGroup,BF,60X_Sync,X-Cite120PC,Shutter-State,Closed
ConfigGroup,BF,60X_Sync,X-Cite120PC,Trigger,Off

# Preset: 40X
ConfigGroup,BF,40X,TUCam,Exposure,10.0016
ConfigGroup,BF,40X,TUCam,Gain,CMS
ConfigGroup,BF,40X,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,40X,TUCam,Output Trigger Kind,Readout End
ConfigGroup,BF,40X,TUCam,Output Trigger Port,1
ConfigGroup,BF,40X,TUCam,Output Trigger Width,5000
ConfigGroup,BF,40X,TUCam,Trigger Edge Mode,Rising
ConfigGroup,BF,40X,TUCam,Trigger Exposure Mode,Timed
ConfigGroup,BF,40X,TUCam,Trigger Mode,Off
ConfigGroup,BF,40X,Spectra,Blue_Enable,0
ConfigGroup,BF,40X,Spectra,Blue_Level,100
ConfigGroup,BF,40X,Spectra,Cyan_Enable,0
ConfigGroup,BF,40X,Spectra,Cyan_Level,100
ConfigGroup,BF,40X,Spectra,Green_Enable,0
ConfigGroup,BF,40X,Spectra,Green_Level,100
ConfigGroup,BF,40X,Spectra,Red_Enable,0
ConfigGroup,BF,40X,Spectra,Red_Level,100
ConfigGroup,BF,40X,Spectra,State,0
ConfigGroup,BF,40X,Spectra,Teal_Enable,0
ConfigGroup,BF,40X,Spectra,Teal_Level,100
ConfigGroup,BF,40X,Spectra,Violet_Enable,0
ConfigGroup,BF,40X,Spectra,Violet_Level,100
ConfigGroup,BF,40X,Spectra,White_Enable,0
ConfigGroup,BF,40X,Spectra,White_Level,100
ConfigGroup,BF,40X,Spectra,YG_Filter,0
ConfigGroup,BF,40X,TINosePiece,Label,4-S Plan Fluor 40x NA 0.60 Dry
ConfigGroup,BF,40X,TINosePiece,State,3
ConfigGroup,BF,40X,TICondenserCassette,ExtraDelayMs,0.0000
ConfigGroup,BF,40X,TICondenserCassette,Label,4-Ph2
ConfigGroup,BF,40X,TICondenserCassette,State,3
ConfigGroup,BF,40X,TIFilterBlock1,Label,6-DAPI
ConfigGroup,BF,40X,TIFilterBlock1,State,5
ConfigGroup,BF,40X,TILightPath,Label,2-Left100
ConfigGroup,BF,40X,TILightPath,State,1
ConfigGroup,BF,40X,TIPFSOffset,Position,334.9500
ConfigGroup,BF,40X,TIPFSStatus,State,Off
ConfigGroup,BF,40X,X-Cite120PC,LampIntensity,50
ConfigGroup,BF,40X,X-Cite120PC,Shutter-State,Open
ConfigGroup,BF,40X,X-Cite120PC,Trigger,Off

# Preset: 10X_Sync
ConfigGroup,BF,10X_Sync,TUCam,Exposure,25.9974
ConfigGroup,BF,10X_Sync,TUCam,Gain,HDR
ConfigGroup,BF,10X_Sync,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,10X_Sync,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,10X_Sync,TUCam,Output Trigger Port,1
ConfigGroup,BF,10X_Sync,TUCam,Output Trigger Width,5000
ConfigGroup,BF,10X_Sync,TUCam,Trigger Edge Mode,Rising
ConfigGroup,BF,10X_Sync,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,10X_Sync,TUCam,Trigger Mode,Standard
ConfigGroup,BF,10X_Sync,Spectra,Blue_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Blue_Level,100
ConfigGroup,BF,10X_Sync,Spectra,Cyan_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Cyan_Level,100
ConfigGroup,BF,10X_Sync,Spectra,Green_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Green_Level,100
ConfigGroup,BF,10X_Sync,Spectra,Red_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Red_Level,100
ConfigGroup,BF,10X_Sync,Spectra,State,0
ConfigGroup,BF,10X_Sync,Spectra,Teal_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Teal_Level,100
ConfigGroup,BF,10X_Sync,Spectra,Violet_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,Violet_Level,100
ConfigGroup,BF,10X_Sync,Spectra,White_Enable,0
ConfigGroup,BF,10X_Sync,Spectra,White_Level,100
ConfigGroup,BF,10X_Sync,Spectra,YG_Filter,0
ConfigGroup,BF,10X_Sync,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X_Sync,TINosePiece,State,0
ConfigGroup,BF,10X_Sync,TICondenserCassette,ExtraDelayMs,0.0000
ConfigGroup,BF,10X_Sync,TICondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X_Sync,TICondenserCassette,State,2
ConfigGroup,BF,10X_Sync,TIFilterBlock1,Label,2-FI-TR
ConfigGroup,BF,10X_Sync,TIFilterBlock1,State,1
ConfigGroup,BF,10X_Sync,TILightPath,Label,2-Left100
ConfigGroup,BF,10X_Sync,TILightPath,State,1
ConfigGroup,BF,10X_Sync,TIPFSOffset,Position,128.7000
ConfigGroup,BF,10X_Sync,TIPFSStatus,State,Off
ConfigGroup,BF,10X_Sync,X-Cite120PC,LampIntensity,12
ConfigGroup,BF,10X_Sync,X-Cite120PC,Shutter-State,Closed
ConfigGroup,BF,10X_Sync,X-Cite120PC,Trigger,Off

# Preset: 10X
ConfigGroup,BF,10X,TUCam,Exposure,3.0030
ConfigGroup,BF,10X,TUCam,Gain,HDR
ConfigGroup,BF,10X,TUCam,Output Trigger Edge Mode,Rising
ConfigGroup,BF,10X,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,10X,TUCam,Output Trigger Port,1
ConfigGroup,BF,10X,TUCam,Output Trigger Width,5000
ConfigGroup,BF,10X,TUCam,Trigger Edge Mode,Rising
ConfigGroup,BF,10X,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,10X,TUCam,Trigger Mode,Standard
ConfigGroup,BF,10X,Spectra,Blue_Enable,0
ConfigGroup,BF,10X,Spectra,Blue_Level,100
ConfigGroup,BF,10X,Spectra,Cyan_Enable,0
ConfigGroup,BF,10X,Spectra,Cyan_Level,100
ConfigGroup,BF,10X,Spectra,Green_Enable,0
ConfigGroup,BF,10X,Spectra,Green_Level,100
ConfigGroup,BF,10X,Spectra,Red_Enable,0
ConfigGroup,BF,10X,Spectra,Red_Level,100
ConfigGroup,BF,10X,Spectra,State,0
ConfigGroup,BF,10X,Spectra,Teal_Enable,0
ConfigGroup,BF,10X,Spectra,Teal_Level,100
ConfigGroup,BF,10X,Spectra,Violet_Enable,0
ConfigGroup,BF,10X,Spectra,Violet_Level,100
ConfigGroup,BF,10X,Spectra,White_Enable,0
ConfigGroup,BF,10X,Spectra,White_Level,100
ConfigGroup,BF,10X,Spectra,YG_Filter,0
ConfigGroup,BF,10X,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X,TINosePiece,State,0
ConfigGroup,BF,10X,TICondenserCassette,ExtraDelayMs,0.0000
ConfigGroup,BF,10X,TICondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X,TICondenserCassette,State,2
ConfigGroup,BF,10X,TIFilterBlock1,Label,2-FI-TR
ConfigGroup,BF,10X,TIFilterBlock1,State,1
ConfigGroup,BF,10X,TILightPath,Label,2-Left100
ConfigGroup,BF,10X,TILightPath,State,1
ConfigGroup,BF,10X,TIPFSOffset,Position,128.7000
ConfigGroup,BF,10X,TIPFSStatus,State,Off
ConfigGroup,BF,10X,X-Cite120PC,LampIntensity,0
ConfigGroup,BF,10X,X-Cite120PC,Shutter-State,Open
ConfigGroup,BF,10X,X-Cite120PC,Trigger,Off



# PixelSize settings

