# Generated by Configurator on Sat Dec 26 21:49:03 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM3,SerialManager,COM3
Device,LudlController,Ludl,LudlController
Device,LudlWheel,Ludl,LudlWheel
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,Camera-1,PVCAM,Camera-1
Device,Spectra,LumencorSpectra,Spectra

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,2
Property,COM6,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,LudlController,Port,COM6
Property,LudlWheel,Fiter Positions,10
Property,LudlWheel,Home-Timeout-(s),10.0000
Property,LudlWheel,LudlDeviceNumberWheel,1
Property,LudlWheel,LudlWheelNumber,1
Property,Spectra,Port,COM3
Property,Spectra,SetLE_Type,Spectra

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Camera-1
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# LudlWheel
Label,LudlWheel,9,Filter-10
Label,LudlWheel,8,Filter-9
Label,LudlWheel,7,Filter-8
Label,LudlWheel,6,Filter-7
Label,LudlWheel,5,Filter-6
Label,LudlWheel,4,Filter-5
Label,LudlWheel,3,Filter-4
Label,LudlWheel,2,Filter-3
Label,LudlWheel,1,Filter-2
Label,LudlWheel,0,Filter-1
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-Plan Fluor 4x
Label,Nosepiece,2,3-
Label,Nosepiece,1,2-Plan Apo Lmbd 100x Oil
Label,Nosepiece,0,1-Plan Fluor 10x
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Empty
Label,FilterTurret1,3,4-Empty
Label,FilterTurret1,2,3-459/526/59Empty
Label,FilterTurret1,1,2-409/493/57459/526/59
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: BF
# Preset: 10X
ConfigGroup,BF,10X,LudlWheel,Label,Filter-1
ConfigGroup,BF,10X,LudlWheel,State,0
ConfigGroup,BF,10X,Nosepiece,Label,1-Plan Fluor 10x
ConfigGroup,BF,10X,Nosepiece,State,0
ConfigGroup,BF,10X,FilterTurret1,Label,1-Empty
ConfigGroup,BF,10X,FilterTurret1,State,0
ConfigGroup,BF,10X,Turret1Shutter,State,0
ConfigGroup,BF,10X,LightPath,Label,2-R100
ConfigGroup,BF,10X,PFS,FocusMaintenance,Off
ConfigGroup,BF,10X,DiaLamp,Intensity,500
ConfigGroup,BF,10X,DiaLamp,State,0
ConfigGroup,BF,10X,Camera-1,Exposure,10.0000
ConfigGroup,BF,10X,Core,AutoFocus,PFS
ConfigGroup,BF,10X,Core,AutoShutter,1
ConfigGroup,BF,10X,Core,Camera,Camera-1
ConfigGroup,BF,10X,Core,Focus,ZDrive
ConfigGroup,BF,10X,Core,Shutter,DiaLamp
ConfigGroup,BF,10X,Core,TimeoutMs,5000
ConfigGroup,BF,10X,Core,XYStage,XYStage
ConfigGroup,BF,10X,Spectra,Blue_Enable,0
ConfigGroup,BF,10X,Spectra,Blue_Level,100
ConfigGroup,BF,10X,Spectra,Cyan_Enable,0
ConfigGroup,BF,10X,Spectra,Cyan_Level,100
ConfigGroup,BF,10X,Spectra,Green_Enable,0
ConfigGroup,BF,10X,Spectra,Green_Level,100
ConfigGroup,BF,10X,Spectra,Red_Enable,0
ConfigGroup,BF,10X,Spectra,Red_Level,100
ConfigGroup,BF,10X,Spectra,State,0
ConfigGroup,BF,10X,Spectra,Teal_Enable,0
ConfigGroup,BF,10X,Spectra,Teal_Level,100
ConfigGroup,BF,10X,Spectra,Violet_Enable,0
ConfigGroup,BF,10X,Spectra,Violet_Level,100
ConfigGroup,BF,10X,Spectra,White_Enable,0
ConfigGroup,BF,10X,Spectra,White_Level,100
ConfigGroup,BF,10X,Spectra,YG_Filter,0



# PixelSize settings

