# Generated by Configurator on Sun Oct 10 14:30:16 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,DiaLamp,NikonTI,TIDiaLamp
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XCite-Exacte,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,DiaLamp,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Unknown
Label,NosePiece,4,5-Plan 40x NA 0.65 Dry
Label,NosePiece,3,4-Unknown
Label,NosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-RED
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-HqTRI
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100

# Configuration presets
# Group: BF
# Preset: 60X
ConfigGroup,BF,60X,DiaLamp,Intensity,24
ConfigGroup,BF,60X,DiaLamp,State,1
ConfigGroup,BF,60X,NosePiece,Label,1-Plan Apo 60x NA 1.40 Oil
ConfigGroup,BF,60X,NosePiece,State,0
ConfigGroup,BF,60X,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,60X,CondenserCassette,State,4
ConfigGroup,BF,60X,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,60X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,60X,HamamatsuHam_DCAM,Exposure,110.0040
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,BF,60X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,BF,60X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,BF,60X,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,60X,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: 100X_External
ConfigGroup,BF,100X_External,DiaLamp,Intensity,24
ConfigGroup,BF,100X_External,DiaLamp,State,1
ConfigGroup,BF,100X_External,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,100X_External,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,Exposure,33.3250
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,BF,100X_External,NosePiece,Label,3-Plan Apo 100x NA 1.45 Oil
ConfigGroup,BF,100X_External,NosePiece,State,2
ConfigGroup,BF,100X_External,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,100X_External,CondenserCassette,State,4
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,100X_External,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: 60X_External
ConfigGroup,BF,60X_External,DiaLamp,Intensity,24
ConfigGroup,BF,60X_External,DiaLamp,State,1
ConfigGroup,BF,60X_External,NosePiece,Label,1-Plan Apo 60x NA 1.40 Oil
ConfigGroup,BF,60X_External,NosePiece,State,0
ConfigGroup,BF,60X_External,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,60X_External,CondenserCassette,State,4
ConfigGroup,BF,60X_External,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,60X_External,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,Exposure,110.0040
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,60X_External,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: 10X
ConfigGroup,BF,10X,DiaLamp,Intensity,15
ConfigGroup,BF,10X,DiaLamp,State,1
ConfigGroup,BF,10X,NosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X,NosePiece,State,1
ConfigGroup,BF,10X,CondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X,CondenserCassette,State,2
ConfigGroup,BF,10X,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,10X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,10X,HamamatsuHam_DCAM,Exposure,110.0040
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,BF,10X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,BF,10X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,BF,10X,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,10X,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: 100X
ConfigGroup,BF,100X,DiaLamp,Intensity,24
ConfigGroup,BF,100X,DiaLamp,State,1
ConfigGroup,BF,100X,NosePiece,Label,3-Plan Apo 100x NA 1.45 Oil
ConfigGroup,BF,100X,NosePiece,State,2
ConfigGroup,BF,100X,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,100X,CondenserCassette,State,4
ConfigGroup,BF,100X,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,100X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X,HamamatsuHam_DCAM,Exposure,33.3250
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],LOW
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,BF,100X,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,BF,100X,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,BF,100X,HamamatsuHam_DCAM,Trigger,NORMAL
ConfigGroup,BF,100X,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE



# PixelSize settings

