# Generated by Configurator on Sun Dec 05 23:51:18 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,DiaLamp,NikonTI,TIDiaLamp
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,TUCam,TUCam,TUCam

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XCite-Exacte,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,DiaLamp,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,TUCam
Property,Core,Focus,PFSOffset
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Unknown
Label,NosePiece,4,5-Plan 40x NA 0.65 Dry
Label,NosePiece,3,4-Unknown
Label,NosePiece,2,3-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-RED
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-HqTRI
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100

# Configuration presets
# Group: BF
# Preset: 100X_External
ConfigGroup,BF,100X_External,DiaLamp,Intensity,23
ConfigGroup,BF,100X_External,DiaLamp,State,1
ConfigGroup,BF,100X_External,NosePiece,Label,3-Plan Apo 100x NA 1.45 Oil
ConfigGroup,BF,100X_External,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,100X_External,FilterBlock1,Label,6-RED
ConfigGroup,BF,100X_External,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,100X_External,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X_External,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,BF,100X_External,TUCam,Binning,2048x2048(Normal)
ConfigGroup,BF,100X_External,TUCam,Exposure,0.0990
ConfigGroup,BF,100X_External,TUCam,Gain,HDR
ConfigGroup,BF,100X_External,TUCam,LEDMode,On
ConfigGroup,BF,100X_External,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,100X_External,TUCam,Output Trigger Port,2
ConfigGroup,BF,100X_External,TUCam,TransposeCorrection,0
ConfigGroup,BF,100X_External,TUCam,TransposeMirrorX,0
ConfigGroup,BF,100X_External,TUCam,TransposeMirrorY,0
ConfigGroup,BF,100X_External,TUCam,TransposeXY,0
ConfigGroup,BF,100X_External,TUCam,Trigger Exposure Mode,Width
ConfigGroup,BF,100X_External,TUCam,Trigger Mode,Standard
ConfigGroup,BF,100X_External,TUCam,Exposure_Auto Adjustment,FALSE
ConfigGroup,BF,100X_External,TUCam,PixelClock,High
ConfigGroup,BF,100X_External,TUCam,Temperature,-50
ConfigGroup,BF,100X_External,TUCam,Trigger Edge Mode,Rising

# Preset: 10X
ConfigGroup,BF,10X,DiaLamp,Intensity,12
ConfigGroup,BF,10X,DiaLamp,State,1
ConfigGroup,BF,10X,NosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X,CondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,10X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,10X,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,BF,10X,TUCam,Binning,2048x2048(Normal)
ConfigGroup,BF,10X,TUCam,Exposure,0.9968
ConfigGroup,BF,10X,TUCam,Gain,CMS
ConfigGroup,BF,10X,TUCam,LEDMode,Off
ConfigGroup,BF,10X,TUCam,Output Trigger Kind,Readout End
ConfigGroup,BF,10X,TUCam,Output Trigger Port,1
ConfigGroup,BF,10X,TUCam,TransposeCorrection,1
ConfigGroup,BF,10X,TUCam,TransposeMirrorX,0
ConfigGroup,BF,10X,TUCam,TransposeMirrorY,0
ConfigGroup,BF,10X,TUCam,TransposeXY,1
ConfigGroup,BF,10X,TUCam,Trigger Exposure Mode,Timed
ConfigGroup,BF,10X,TUCam,Trigger Mode,Off
ConfigGroup,BF,10X,FilterBlock1,Label,6-RED
ConfigGroup,BF,10X,TUCam,Exposure_Auto Adjustment,FALSE
ConfigGroup,BF,10X,TUCam,PixelClock,High
ConfigGroup,BF,10X,TUCam,Temperature,-10
ConfigGroup,BF,10X,TUCam,Trigger Edge Mode,Rising

# Preset: 100X
ConfigGroup,BF,100X,DiaLamp,Intensity,19
ConfigGroup,BF,100X,DiaLamp,State,1
ConfigGroup,BF,100X,NosePiece,Label,3-Plan Apo 100x NA 1.45 Oil
ConfigGroup,BF,100X,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,100X,FilterBlock1,Label,6-RED
ConfigGroup,BF,100X,XCite-Exacte,Lamp-Intensity,38
ConfigGroup,BF,100X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,BF,100X,TUCam,Binning,2048x2048(Normal)
ConfigGroup,BF,100X,TUCam,Exposure,0.1680
ConfigGroup,BF,100X,TUCam,Gain,CMS
ConfigGroup,BF,100X,TUCam,LEDMode,Off
ConfigGroup,BF,100X,TUCam,Output Trigger Kind,Global Exposure
ConfigGroup,BF,100X,TUCam,Output Trigger Port,2
ConfigGroup,BF,100X,TUCam,TransposeCorrection,1
ConfigGroup,BF,100X,TUCam,TransposeMirrorX,0
ConfigGroup,BF,100X,TUCam,TransposeMirrorY,0
ConfigGroup,BF,100X,TUCam,TransposeXY,1
ConfigGroup,BF,100X,TUCam,Trigger Exposure Mode,Timed
ConfigGroup,BF,100X,TUCam,Trigger Mode,Software
ConfigGroup,BF,100X,TUCam,Exposure_Auto Adjustment,FALSE
ConfigGroup,BF,100X,TUCam,PixelClock,High
ConfigGroup,BF,100X,TUCam,Temperature,-10
ConfigGroup,BF,100X,TUCam,Trigger Edge Mode,Rising



# PixelSize settings

