# Generated by Configurator on Wed Sep 08 01:49:50 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM7,SerialManager,COM7
Device,COM4,SerialManager,COM4
Device,TIScope,NikonTI,TIScope
Device,EpiShutter,NikonTI,TIEpiShutter
Device,NosePiece,NikonTI,TINosePiece
Device,CondenserCassette,NikonTI,TICondenserCassette
Device,FilterBlock1,NikonTI,TIFilterBlock1
Device,LightPath,NikonTI,TILightPath
Device,ZDrive,NikonTI,TIZDrive
Device,PFSOffset,NikonTI,TIPFSOffset
Device,PFSStatus,NikonTI,TIPFSStatus
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,DiaLamp,NikonTI,TIDiaLamp
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input
Device,Arduino-DAC1,Arduino,Arduino-DAC1
Device,Arduino-DAC2,Arduino,Arduino-DAC2
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte

# Pre-init settings for devices
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,57600
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,0
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM7
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On
Property,Arduino-DAC1,MaxVolt,5.0000
Property,Arduino-DAC2,MaxVolt,5.0000
Property,XCite-Exacte,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,EpiShutter,TIScope
Parent,NosePiece,TIScope
Parent,CondenserCassette,TIScope
Parent,FilterBlock1,TIScope
Parent,LightPath,TIScope
Parent,ZDrive,TIScope
Parent,PFSOffset,TIScope
Parent,PFSStatus,TIScope
Parent,DiaLamp,TIScope
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub
Parent,Arduino-DAC1,Arduino-Hub
Parent,Arduino-DAC2,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,Arduino-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# NosePiece
Label,NosePiece,5,6-Plan Apo VC 100x NA 1.40 Oil
Label,NosePiece,4,5-Plan Apo 100x NA 1.45 Oil
Label,NosePiece,3,4-S Plan Fluor 40x NA 0.60 Dry
Label,NosePiece,2,3-Plan Apo VC 100x NA 1.40 Oil
Label,NosePiece,1,2-Plan Fluor 10x NA 0.30 Dry
Label,NosePiece,0,1-Plan Fluor 4x NA 0.13 Dry
# CondenserCassette
Label,CondenserCassette,4,5-Ph3
Label,CondenserCassette,3,4-Ph2
Label,CondenserCassette,2,3-Ph1
Label,CondenserCassette,1,2-PhL
Label,CondenserCassette,0,1-A
# FilterBlock1
Label,FilterBlock1,5,6-CFPHQ
Label,FilterBlock1,4,5-YFPHQ
Label,FilterBlock1,3,4-Red
Label,FilterBlock1,2,3-FITC
Label,FilterBlock1,1,2-DAPI
Label,FilterBlock1,0,1------
# LightPath
Label,LightPath,3,4-Left80
Label,LightPath,2,3-Right100
Label,LightPath,1,2-Left100
Label,LightPath,0,1-Eye100
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0

# Configuration presets
# Group: BF
# Preset: 60X
ConfigGroup,BF,60X,EpiShutter,State,0
ConfigGroup,BF,60X,NosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,BF,60X,NosePiece,State,0
ConfigGroup,BF,60X,CondenserCassette,Label,5-Ph3
ConfigGroup,BF,60X,FilterBlock1,State,5
ConfigGroup,BF,60X,LightPath,Label,2-Left100
ConfigGroup,BF,60X,LightPath,State,1
ConfigGroup,BF,60X,PFSOffset,Position,128.7000
ConfigGroup,BF,60X,PFSStatus,State,Off
ConfigGroup,BF,60X,Andor sCMOS Camera,Exposure,49.9968
ConfigGroup,BF,60X,DiaLamp,ComputerControl,On
ConfigGroup,BF,60X,DiaLamp,Intensity,24
ConfigGroup,BF,60X,DiaLamp,State,1
ConfigGroup,BF,60X,Arduino-Switch,Label,32
ConfigGroup,BF,60X,Arduino-Switch,State,32
ConfigGroup,BF,60X,Arduino-Shutter,OnOff,0
ConfigGroup,BF,60X,XCite-Exacte,Lamp-Intensity,15
ConfigGroup,BF,60X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,60X,XCite-Exacte,Shutter-State,Closed

# Preset: 10X
ConfigGroup,BF,10X,EpiShutter,State,0
ConfigGroup,BF,10X,NosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigGroup,BF,10X,NosePiece,State,1
ConfigGroup,BF,10X,CondenserCassette,Label,3-Ph1
ConfigGroup,BF,10X,FilterBlock1,State,5
ConfigGroup,BF,10X,LightPath,Label,2-Left100
ConfigGroup,BF,10X,LightPath,State,1
ConfigGroup,BF,10X,PFSOffset,Position,128.7000
ConfigGroup,BF,10X,PFSStatus,State,Off
ConfigGroup,BF,10X,Andor sCMOS Camera,Exposure,49.9968
ConfigGroup,BF,10X,DiaLamp,ComputerControl,On
ConfigGroup,BF,10X,DiaLamp,Intensity,24
ConfigGroup,BF,10X,DiaLamp,State,1
ConfigGroup,BF,10X,Arduino-Switch,Label,32
ConfigGroup,BF,10X,Arduino-Switch,State,32
ConfigGroup,BF,10X,Arduino-Shutter,OnOff,0
ConfigGroup,BF,10X,XCite-Exacte,Lamp-Intensity,15
ConfigGroup,BF,10X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,10X,XCite-Exacte,Shutter-State,Closed

# Preset: 100X
ConfigGroup,BF,100X,EpiShutter,State,0
ConfigGroup,BF,100X,NosePiece,Label,3-Plan Apo VC 100x NA 1.40 Oil
ConfigGroup,BF,100X,NosePiece,State,2
ConfigGroup,BF,100X,FilterBlock1,State,5
ConfigGroup,BF,100X,LightPath,Label,2-Left100
ConfigGroup,BF,100X,LightPath,State,1
ConfigGroup,BF,100X,PFSOffset,Position,128.7000
ConfigGroup,BF,100X,PFSStatus,State,Off
ConfigGroup,BF,100X,Andor sCMOS Camera,Exposure,10.0032
ConfigGroup,BF,100X,DiaLamp,ComputerControl,On
ConfigGroup,BF,100X,DiaLamp,Intensity,24
ConfigGroup,BF,100X,DiaLamp,State,1
ConfigGroup,BF,100X,Arduino-Switch,Label,32
ConfigGroup,BF,100X,Arduino-Switch,State,32
ConfigGroup,BF,100X,Arduino-Shutter,OnOff,1
ConfigGroup,BF,100X,XCite-Exacte,Lamp-Intensity,100
ConfigGroup,BF,100X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X,XCite-Exacte,Shutter-State,Closed
ConfigGroup,BF,100X,CondenserCassette,Label,5-Ph3



# PixelSize settings
# Resolution preset: Phase_10X
ConfigPixelSize,Phase_10X,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
ConfigPixelSize,Phase_10X,Core,Camera,Andor sCMOS Camera
PixelSize_um,Phase_10X,0.6539
PixelSizeAffine,Phase_10X,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res40X
ConfigPixelSize,Res40X,TINosePiece,Label,4-S Plan Fluor 40x NA 0.60 Dry
PixelSize_um,Res40X,0.1635
PixelSizeAffine,Res40X,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res10X
ConfigPixelSize,Res10X,TINosePiece,Label,2-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,Res10X,0.6539
PixelSizeAffine,Res10X,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res100X
ConfigPixelSize,Res100X,TINosePiece,Label,6-Plan Apo VC 100x NA 1.40 Oil
PixelSize_um,Res100X,0.0654
PixelSizeAffine,Res100X,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: Res4X
ConfigPixelSize,Res4X,TINosePiece,Label,1-Plan Fluor 4x NA 0.13 Dry
PixelSize_um,Res4X,1.6348
PixelSizeAffine,Res4X,1.0,0.0,0.0,0.0,1.0,0.0
# Resolution preset: BF_100
ConfigPixelSize,BF_100,TINosePiece,Label,3-Plan Apo VC 100x NA 1.40 Oil
ConfigPixelSize,BF_100,Core,Camera,Andor sCMOS Camera
PixelSize_um,BF_100,0.0065
PixelSizeAffine,BF_100,0.0065,0.0,0.0,0.0,0.0065,0.0
# Resolution preset: Res20X
ConfigPixelSize,Res20X,TINosePiece,Label,3-S Plan Fluor 20x NA 0.45 Dry
PixelSize_um,Res20X,0.327
PixelSizeAffine,Res20X,1.0,0.0,0.0,0.0,1.0,0.0

