# Generated by Configurator on Sun Sep 06 22:13:38 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte

# Pre-init settings for devices
Property,XCite-Exacte,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,2000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,DiaLamp
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-Plan Apo Lmbd 100x Oil
Label,Nosepiece,4,5-Plan Apo Lmbd 100x Oil
Label,Nosepiece,3,4-S Plan Fluor 40x
Label,Nosepiece,2,3-S Plan Flour 20x
Label,Nosepiece,1,2-Plan Fluor 10x
Label,Nosepiece,0,1-Plan Fluor 4x
# CondenserTurret
Label,CondenserTurret,6,7-OPEN
Label,CondenserTurret,5,6-Shutter
Label,CondenserTurret,4,5-ND
Label,CondenserTurret,3,4-Ph3
Label,CondenserTurret,2,3-Ph2
Label,CondenserTurret,1,2-Ph1
Label,CondenserTurret,0,1-PhL
# FilterTurret1
Label,FilterTurret1,5,6-Cy5
Label,FilterTurret1,4,5-TRITC
Label,FilterTurret1,3,4-YFP HYQ
Label,FilterTurret1,2,3-FITC
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: 40_
ConfigPixelSize,40_,Nosepiece,Label,4-S Plan Fluor 40x
PixelSize_um,40_,0.16
PixelSizeAffine,40_,0.16,0.0,0.0,0.0,0.16,0.0

