# Generated by Configurator on Fri Dec 25 17:15:56 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte

# Pre-init settings for devices
Property,COM3,AnswerTimeout,2000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,XCite-Exacte,Port,COM3

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E__0
Parent,XYStage,Ti2-E__0
Parent,Nosepiece,Ti2-E__0
Parent,CondenserTurret,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,DiaLamp,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,DiaLamp
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-Plan Apo Lmbd 100x Oil
Label,Nosepiece,4,5-Plan Apo Lmbd 100x Oil
Label,Nosepiece,3,4-S Plan Fluor 40x
Label,Nosepiece,2,3-S Plan Flour 20x
Label,Nosepiece,1,2-Plan Fluor 10x
Label,Nosepiece,0,1-Plan Fluor 4x
# CondenserTurret
Label,CondenserTurret,6,7-OPEN
Label,CondenserTurret,5,6-Shutter
Label,CondenserTurret,4,5-ND
Label,CondenserTurret,3,4-Ph3
Label,CondenserTurret,2,3-Ph2
Label,CondenserTurret,1,2-Ph1
Label,CondenserTurret,0,1-PhL
# FilterTurret1
Label,FilterTurret1,5,6-Cy5
Label,FilterTurret1,4,5-TRITC
Label,FilterTurret1,3,4-YFP HYQ
Label,FilterTurret1,2,3-FITC
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: FLU
# Preset: GFP_100
ConfigGroup,FLU,GFP_100,Andor sCMOS Camera,Binning,1x1
ConfigGroup,FLU,GFP_100,Andor sCMOS Camera,Exposure,19.9968
ConfigGroup,FLU,GFP_100,Andor sCMOS Camera,Ext (Exp) Trigger Timeout[ms],5000
ConfigGroup,FLU,GFP_100,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,FLU,GFP_100,Nosepiece,Label,5-Plan Apo Lmbd 100x Oil
ConfigGroup,FLU,GFP_100,CondenserTurret,Label,4-Ph3
ConfigGroup,FLU,GFP_100,FilterTurret1,Label,3-FITC
ConfigGroup,FLU,GFP_100,Turret1Shutter,State,1
ConfigGroup,FLU,GFP_100,LightPath,Label,2-R100
ConfigGroup,FLU,GFP_100,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FLU,GFP_100,PFS,FocusMaintenance,On
ConfigGroup,FLU,GFP_100,PFS,LEDIntensity,100
ConfigGroup,FLU,GFP_100,DiaLamp,Intensity,0
ConfigGroup,FLU,GFP_100,DiaLamp,State,0
ConfigGroup,FLU,GFP_100,XCite-Exacte,Alarm-Clear,Clear
ConfigGroup,FLU,GFP_100,XCite-Exacte,CLF-Mode,Off
ConfigGroup,FLU,GFP_100,XCite-Exacte,Clear-Calibration,Clear
ConfigGroup,FLU,GFP_100,XCite-Exacte,Front-Panel-Lock,False
ConfigGroup,FLU,GFP_100,XCite-Exacte,Lamp-Intensity,5
ConfigGroup,FLU,GFP_100,XCite-Exacte,Lamp-State,On
ConfigGroup,FLU,GFP_100,XCite-Exacte,Output-Power,0.0000
ConfigGroup,FLU,GFP_100,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,FLU,GFP_100,XCite-Exacte,Shutter-Dwell-Time,0
ConfigGroup,FLU,GFP_100,XCite-Exacte,Shutter-State,Closed

# Preset: RFP_100
ConfigGroup,FLU,RFP_100,Andor sCMOS Camera,Binning,1x1
ConfigGroup,FLU,RFP_100,Andor sCMOS Camera,Exposure,400
ConfigGroup,FLU,RFP_100,Andor sCMOS Camera,Ext (Exp) Trigger Timeout[ms],5000
ConfigGroup,FLU,RFP_100,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,FLU,RFP_100,Nosepiece,Label,5-Plan Apo Lmbd 100x Oil
ConfigGroup,FLU,RFP_100,CondenserTurret,Label,4-Ph3
ConfigGroup,FLU,RFP_100,FilterTurret1,Label,6-Cy5
ConfigGroup,FLU,RFP_100,Turret1Shutter,State,1
ConfigGroup,FLU,RFP_100,LightPath,Label,2-R100
ConfigGroup,FLU,RFP_100,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FLU,RFP_100,PFS,FocusMaintenance,On
ConfigGroup,FLU,RFP_100,PFS,LEDIntensity,100
ConfigGroup,FLU,RFP_100,DiaLamp,Intensity,0
ConfigGroup,FLU,RFP_100,DiaLamp,State,0
ConfigGroup,FLU,RFP_100,XCite-Exacte,Alarm-Clear,Clear
ConfigGroup,FLU,RFP_100,XCite-Exacte,CLF-Mode,Off
ConfigGroup,FLU,RFP_100,XCite-Exacte,Clear-Calibration,Clear
ConfigGroup,FLU,RFP_100,XCite-Exacte,Front-Panel-Lock,False
ConfigGroup,FLU,RFP_100,XCite-Exacte,Lamp-Intensity,50
ConfigGroup,FLU,RFP_100,XCite-Exacte,Lamp-State,On
ConfigGroup,FLU,RFP_100,XCite-Exacte,Output-Power,0.0000
ConfigGroup,FLU,RFP_100,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,FLU,RFP_100,XCite-Exacte,Shutter-Dwell-Time,0
ConfigGroup,FLU,RFP_100,XCite-Exacte,Shutter-State,Closed

# Preset: GFP_40
ConfigGroup,FLU,GFP_40,Andor sCMOS Camera,Binning,1x1
ConfigGroup,FLU,GFP_40,Andor sCMOS Camera,Exposure,34.0032
ConfigGroup,FLU,GFP_40,Andor sCMOS Camera,Ext (Exp) Trigger Timeout[ms],5000
ConfigGroup,FLU,GFP_40,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,FLU,GFP_40,Nosepiece,Label,4-S Plan Fluor 40x
ConfigGroup,FLU,GFP_40,CondenserTurret,Label,3-Ph2
ConfigGroup,FLU,GFP_40,FilterTurret1,Label,3-FITC
ConfigGroup,FLU,GFP_40,Turret1Shutter,State,1
ConfigGroup,FLU,GFP_40,LightPath,Label,2-R100
ConfigGroup,FLU,GFP_40,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FLU,GFP_40,PFS,FocusMaintenance,On
ConfigGroup,FLU,GFP_40,PFS,LEDIntensity,212
ConfigGroup,FLU,GFP_40,DiaLamp,Intensity,281
ConfigGroup,FLU,GFP_40,DiaLamp,State,0
ConfigGroup,FLU,GFP_40,XCite-Exacte,Alarm-Clear,Clear
ConfigGroup,FLU,GFP_40,XCite-Exacte,CLF-Mode,Off
ConfigGroup,FLU,GFP_40,XCite-Exacte,Clear-Calibration,Clear
ConfigGroup,FLU,GFP_40,XCite-Exacte,Front-Panel-Lock,False
ConfigGroup,FLU,GFP_40,XCite-Exacte,Lamp-Intensity,100
ConfigGroup,FLU,GFP_40,XCite-Exacte,Lamp-State,Off
ConfigGroup,FLU,GFP_40,XCite-Exacte,Output-Power,0.0000
ConfigGroup,FLU,GFP_40,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,FLU,GFP_40,XCite-Exacte,Shutter-Dwell-Time,0
ConfigGroup,FLU,GFP_40,XCite-Exacte,Shutter-State,Open


# Group: BF
# Preset: 40X
ConfigGroup,BF,40X,Andor sCMOS Camera,Binning,1x1
ConfigGroup,BF,40X,Andor sCMOS Camera,ElectronicShutteringMode,Rolling
ConfigGroup,BF,40X,Andor sCMOS Camera,Exposure,34.0032
ConfigGroup,BF,40X,Andor sCMOS Camera,Ext (Exp) Trigger Timeout[ms],5000
ConfigGroup,BF,40X,Andor sCMOS Camera,FrameRate,22.8086
ConfigGroup,BF,40X,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,BF,40X,Nosepiece,Label,4-S Plan Fluor 40x
ConfigGroup,BF,40X,CondenserTurret,Label,3-Ph2
ConfigGroup,BF,40X,FilterTurret1,Label,3-FITC
ConfigGroup,BF,40X,Turret1Shutter,State,0
ConfigGroup,BF,40X,LightPath,Label,2-R100
ConfigGroup,BF,40X,PFS,DichroicMirrorInserted,Yes
ConfigGroup,BF,40X,PFS,FocusMaintenance,On
ConfigGroup,BF,40X,PFS,LEDIntensity,116
ConfigGroup,BF,40X,DiaLamp,Intensity,545
ConfigGroup,BF,40X,DiaLamp,State,1
ConfigGroup,BF,40X,XCite-Exacte,Shutter-State,Closed

# Preset: 100X
ConfigGroup,BF,100X,Andor sCMOS Camera,Binning,1x1
ConfigGroup,BF,100X,Andor sCMOS Camera,ElectronicShutteringMode,Rolling
ConfigGroup,BF,100X,Andor sCMOS Camera,Exposure,19.9968
ConfigGroup,BF,100X,Andor sCMOS Camera,Ext (Exp) Trigger Timeout[ms],5000
ConfigGroup,BF,100X,Andor sCMOS Camera,FrameRate,33.5157
ConfigGroup,BF,100X,Andor sCMOS Camera,Sensitivity/DynamicRange,16-bit (low noise & high well capacity)
ConfigGroup,BF,100X,Nosepiece,Label,5-Plan Apo Lmbd 100x Oil
ConfigGroup,BF,100X,CondenserTurret,Label,4-Ph3
ConfigGroup,BF,100X,FilterTurret1,Label,3-FITC
ConfigGroup,BF,100X,Turret1Shutter,State,1
ConfigGroup,BF,100X,LightPath,Label,2-R100
ConfigGroup,BF,100X,PFS,DichroicMirrorInserted,Yes
ConfigGroup,BF,100X,PFS,FocusMaintenance,On
ConfigGroup,BF,100X,PFS,LEDIntensity,100
ConfigGroup,BF,100X,DiaLamp,Intensity,1829
ConfigGroup,BF,100X,DiaLamp,State,1
ConfigGroup,BF,100X,XCite-Exacte,Alarm-Clear,Clear
ConfigGroup,BF,100X,XCite-Exacte,CLF-Mode,Off
ConfigGroup,BF,100X,XCite-Exacte,Clear-Calibration,Clear
ConfigGroup,BF,100X,XCite-Exacte,Front-Panel-Lock,False
ConfigGroup,BF,100X,XCite-Exacte,Lamp-Intensity,5
ConfigGroup,BF,100X,XCite-Exacte,Lamp-State,On
ConfigGroup,BF,100X,XCite-Exacte,Output-Power,0.0000
ConfigGroup,BF,100X,XCite-Exacte,PC-Shutter-Control,True
ConfigGroup,BF,100X,XCite-Exacte,Shutter-Dwell-Time,0
ConfigGroup,BF,100X,XCite-Exacte,Shutter-State,Closed
ConfigGroup,BF,100X,XCite-Exacte,Shutter-State,Closed




# PixelSize settings
# Resolution preset: 40_
ConfigPixelSize,40_,Nosepiece,Label,4-S Plan Fluor 40x
PixelSize_um,40_,0.163
PixelSizeAffine,40_,0.16,0.0,0.0,0.0,0.16,0.0
# Resolution preset: 100_
ConfigPixelSize,100_,Nosepiece,Label,5-Plan Apo Lmbd 100x Oil
PixelSize_um,100_,0.065
PixelSizeAffine,100_,0.065,0.0,0.0,0.0,0.065,0.0

